CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:YFP
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    Set intensity range from:Manual
    Assignments count:3
    Single images count:0
    Maximum intensity:65535
    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:YFP
    Name the primary objects to be identified:puncta
    Typical diameter of objects, in pixel units (Min,Max):5,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:30
    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.95
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:6|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notes:['Measure the intensity of the foci.']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
    Select images to measure:YFP
    Select objects to measure:puncta

ExportToSpreadsheet:[module_num:7|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:puncta
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
